PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = DRM Memory test
  keyboardBackend = Pyglet
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Routines
  Routine welcome
    TextComponent textwelcome
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = Welcome to my DRM Memory test
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  Routine instr1
    TextComponent textinstr1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Memorize the following list of words to the best of your ability.

        press the spacebar when ready to begin.
    KeyboardComponent key_respinstr1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine lureFruit
    TextComponent textFruit
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $lureFruit
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  Routine blank
    TextComponent textblank
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine blank_2
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine lurecold_2
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $lureCold
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  Routine lureSleep_2
    TextComponent textsleep
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $lureSleep
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  Routine blank_3
    TextComponent textblank2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine instr2
    TextComponent textinstr2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Answer the following math problem by entering the correct answer from your keyboard.

        press spacebar to begin.
    KeyboardComponent keyinstr2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine math
    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = (7 + 8) - 10 =
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    KeyboardComponent key_resp
      allowedKeys = '5'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine math_2
    TextComponent textmath
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = (7 + 8) - 10 =
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    KeyboardComponent keymath
      allowedKeys = '5'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instr3
    TextComponent textinstr3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        That's correct!

        The final test will present a new 15-word list with both new and old words.

        Identify the previously presented words by entering
        --- 'y' for yes (previously presented), or
        --- 'n' for no (not previously presented)

        press the spacebar when ready to begin.
    KeyboardComponent key_respinstr3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine test
    TextComponent texttest
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $RecogTest
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    KeyboardComponent key_resptest
      allowedKeys [set every repeat] = 'y','n'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine blank_4
  Routine thanks
    TextComponent textthanks
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Thank you for participating in this experiment.

        Press spacebar to exit.
    KeyboardComponent key_respthanks
      allowedKeys = 'space', 'esc'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine welcome
  Routine instr1
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = /Users/kashishshah/Downloads/DRMTest - Sheet1.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('lureFruit', ' ripe'), ('lureSleep', 'rest'), ('lureCold', 'chilly'), ('RecogTest', 'sleep'), ('corrAns', 'n')]),
      OrderedDict([('lureFruit', 'orange'), ('lureSleep', 'doze'), ('lureCold', 'heat'), ('RecogTest', 'fruit'), ('corrAns', 'n')]),
      OrderedDict([('lureFruit', 'pear'), ('lureSleep', 'snore'), ('lureCold', 'ice'), ('RecogTest', 'cold'), ('corrAns', 'n')]),
      OrderedDict([('lureFruit', 'citrus'), ('lureSleep', 'bed'), ('lureCold', 'hot'), ('RecogTest', 'ripe'), ('corrAns', 'y')]),
      OrderedDict([('lureFruit', 'basket '), ('lureSleep', 'tired'), ('lureCold', 'snow'), ('RecogTest', 'apple'), ('corrAns', 'y')]),
      OrderedDict([('lureFruit', 'apple'), ('lureSleep', 'wake'), ('lureCold', 'frost'), ('RecogTest', 'snore'), ('corrAns', 'y')]),
      OrderedDict([('lureFruit', 'vegetable'), ('lureSleep', 'nap'), ('lureCold', 'wet'), ('RecogTest', 'awake'), ('corrAns', 'y')]),
      OrderedDict([('lureFruit', 'bowl'), ('lureSleep', 'awake'), ('lureCold', 'arctic'), ('RecogTest', 'chilly'), ('corrAns', 'y')]),
      OrderedDict([('lureFruit', 'cherry'), ('lureSleep', 'dream'), ('lureCold', 'warm'), ('RecogTest', 'freeze'), ('corrAns', 'y')]),
      OrderedDict([('lureFruit', 'juice'), ('lureSleep', 'peace'), ('lureCold', 'winter'), ('RecogTest', 'climb'), ('corrAns', 'n')]),
      OrderedDict([('lureFruit', 'salad'), ('lureSleep', 'snooze'), ('lureCold', 'air'), ('RecogTest', 'eye'), ('corrAns', 'n')])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
    Routine lureFruit
    Routine blank
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = /Users/kashishshah/Downloads/DRMTest - Sheet1.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('lureFruit', ' ripe'), ('lureSleep', 'rest'), ('lureCold', 'chilly'), ('RecogTest', 'sleep'), ('corrAns', 'n')]),
      OrderedDict([('lureFruit', 'orange'), ('lureSleep', 'doze'), ('lureCold', 'heat'), ('RecogTest', 'fruit'), ('corrAns', 'n')]),
      OrderedDict([('lureFruit', 'pear'), ('lureSleep', 'snore'), ('lureCold', 'ice'), ('RecogTest', 'cold'), ('corrAns', 'n')]),
      OrderedDict([('lureFruit', 'citrus'), ('lureSleep', 'bed'), ('lureCold', 'hot'), ('RecogTest', 'ripe'), ('corrAns', 'y')]),
      OrderedDict([('lureFruit', 'basket '), ('lureSleep', 'tired'), ('lureCold', 'snow'), ('RecogTest', 'apple'), ('corrAns', 'y')]),
      OrderedDict([('lureFruit', 'apple'), ('lureSleep', 'wake'), ('lureCold', 'frost'), ('RecogTest', 'snore'), ('corrAns', 'y')]),
      OrderedDict([('lureFruit', 'vegetable'), ('lureSleep', 'nap'), ('lureCold', 'wet'), ('RecogTest', 'awake'), ('corrAns', 'y')]),
      OrderedDict([('lureFruit', 'bowl'), ('lureSleep', 'awake'), ('lureCold', 'arctic'), ('RecogTest', 'chilly'), ('corrAns', 'y')]),
      OrderedDict([('lureFruit', 'cherry'), ('lureSleep', 'dream'), ('lureCold', 'warm'), ('RecogTest', 'freeze'), ('corrAns', 'y')]),
      OrderedDict([('lureFruit', 'juice'), ('lureSleep', 'peace'), ('lureCold', 'winter'), ('RecogTest', 'climb'), ('corrAns', 'n')]),
      OrderedDict([('lureFruit', 'salad'), ('lureSleep', 'snooze'), ('lureCold', 'air'), ('RecogTest', 'eye'), ('corrAns', 'n')])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
    Routine lureSleep_2
    Routine blank
  LoopTerminator trials_2
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = /Users/kashishshah/Downloads/DRMTest - Sheet1.csv
    loopType = random
    nReps = 1
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    conditions:
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    Routine lurecold_2
    Routine blank
  LoopTerminator trials_3
  Routine instr2
  Routine math
  Routine instr3
  LoopInitiator trialsTest loopType="TrialHandler"
    conditionsFile = /Users/kashishshah/Downloads/DRMTest - Sheet1.csv
    loopType = random
    nReps = 1
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    conditions:
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    Routine test
    Routine blank
  LoopTerminator trialsTest
  Routine thanks
