PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = Delay Discounting Task
  keyboardBackend = Pyglet
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Routines
  Routine trial
    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 1.0
      text [set every repeat] = $"GBP " + str(reward_today) + " today" + " or " + "GBP" + str(future_reward) + " after " + str(delay) + " days"
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    KeyboardComponent key_resp
      allowedKeys = 't','l'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = /Users/kashishshah/Downloads/Delay Discounting Task-2.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'reward_today': 11.0, 'future_reward': 30.0, 'delay': 7.0},
      {'reward_today': 15.0, 'future_reward': 35.0, 'delay': 13.0},
      {'reward_today': 27.0, 'future_reward': 50.0, 'delay': 21.0},
      {'reward_today': 40.0, 'future_reward': 55.0, 'delay': 62.0},
      {'reward_today': 49.0, 'future_reward': 60.0, 'delay': 89.0},
      {'reward_today': 67.0, 'future_reward': 75.0, 'delay': 119.0},
      {'reward_today': 78.0, 'future_reward': 80.0, 'delay': 162.0}]
    Routine trial
  LoopTerminator trials
