PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = word piming
  keyboardBackend = Pyglet
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Routines
  Routine trial
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.0
      text [set every repeat] = $Study_word
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    SliderComponent slider
      forceEndRoutine = True
      granularity = 0
      labels = "familier","unfamiler"
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine test
    TextComponent text_2
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $test
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (None, None)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    TextComponent text_3
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Click to submit
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    MouseComponent mouse
      clickable = text_3
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = /Users/kashishshah/Downloads/study_word-3.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Study_word': 'vase'},
      {'Study_word': 'tiger'},
      {'Study_word': 'book '},
      {'Study_word': 'cushion'},
      {'Study_word': 'piano'},
      {'Study_word': 'marble'},
      {'Study_word': ' board'},
      {'Study_word': 'Laptop'},
      {'Study_word': 'Chart'},
      {'Study_word': ' mouse'},
      {'Study_word': 'Pastry'},
      {'Study_word': 'Case'},
      {'Study_word': 'Cruise'},
      {'Study_word': 'Police'},
      {'Study_word': 'Keys'},
      {'Study_word': 'Poster'},
      {'Study_word': 'shirt'},
      {'Study_word': None},
      {'Study_word': None},
      {'Study_word': None},
      {'Study_word': None}]
    Routine trial
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = /Users/kashishshah/Downloads/test words-3.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'test': '_a_e'},
      {'test': 't_g_r'},
      {'test': '_oo_ '},
      {'test': 'c_s_h_o_n'},
      {'test': '_ia_n_'},
      {'test': 'c_m_r_'},
      {'test': '_p_a_d_'},
      {'test': '_o_s_'},
      {'test': 'o_a_n_e'},
      {'test': 'p_o_e'},
      {'test': '_ar_le'},
      {'test': ' b_a_d'},
      {'test': 'L_p_o_'},
      {'test': '_ha_t'},
      {'test': ' _o_s_'},
      {'test': '_a_t_y'},
      {'test': '_as_'},
      {'test': 'C_u_s_'},
      {'test': 'P_l_c_'},
      {'test': None},
      {'test': None},
      {'test': None}]
    Routine test
  LoopTerminator trials_2
